PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = expInfo['expName'] + '_' + expInfo['participant'] + '_' + expInfo['session']
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Feature vs conjunction experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine instructions
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    TextComponent text
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        VISUAL SEARCH TASK

        In this experiment, you will see displays containing different letters.

        Your task is to determine whether the target is present or absent.

        You will complete two types of visual search:

        FEATURE SEARCH
        Look for either a BLUE letter (T or X) or the letter S.

        CONJUNCTION SEARCH
        Look specifically for a GREEN T.

        The other letters will be BROWN T's and GREEN X's.

        Press P if the target is PRESENT.
        Press A if the target is ABSENT.

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        import random

        stim_height = 0.08

        positions = []

        for x in [-0.75, -0.45, -0.15, 0.15, 0.45, 0.75]:
            for y in [-0.32, -0.16, 0, 0.16, 0.32]:
                positions.append((x, y))
      Begin Routine:
        current_search_type = search_type
        current_display_size = int(display_size)
        current_target_presence = target_presence

        if current_target_presence == 'present':
            correct_answer = 'p'
        else:
            correct_answer = 'a'

        random.shuffle(positions)

        trial_positions = positions[:current_display_size]

        stimuli = []

        # FEATURE SEARCH
        if current_search_type == 'feature':

            if current_target_presence == 'present':

                target_index = random.randrange(current_display_size)
                target_type = random.choice(['blue_letter', 'S'])

                for i in range(current_display_size):

                    if i == target_index:

                        if target_type == 'blue_letter':
                            letter = random.choice(['T', 'X'])
                            colour = 'blue'
                        else:
                            letter = 'S'
                            colour = random.choice(['brown', 'green'])

                    else:

                        if random.random() < 0.5:
                            letter = 'T'
                            colour = 'brown'
                        else:
                            letter = 'X'
                            colour = 'green'

                    stim = visual.TextStim(
                        win=win,
                        text=letter,
                        pos=trial_positions[i],
                        height=stim_height,
                        color=colour
                    )

                    stimuli.append(stim)

            else:

                for i in range(current_display_size):

                    if random.random() < 0.5:
                        letter = 'T'
                        colour = 'brown'
                    else:
                        letter = 'X'
                        colour = 'green'

                    stim = visual.TextStim(
                        win=win,
                        text=letter,
                        pos=trial_positions[i],
                        height=stim_height,
                        color=colour
                    )

                    stimuli.append(stim)


        # CONJUNCTION SEARCH
        elif current_search_type == 'conjunction':

            if current_target_presence == 'present':

                target_index = random.randrange(current_display_size)

                for i in range(current_display_size):

                    if i == target_index:

                        stim = visual.TextStim(
                            win=win,
                            text='T',
                            pos=trial_positions[i],
                            height=stim_height,
                            color='green'
                        )

                        stimuli.append(stim)

                    else:

                        if random.random() < 0.5:
                            letter = 'T'
                            colour = 'brown'
                        else:
                            letter = 'X'
                            colour = 'green'

                        stim = visual.TextStim(
                            win=win,
                            text=letter,
                            pos=trial_positions[i],
                            height=stim_height,
                            color=colour
                        )

                        stimuli.append(stim)

            else:

                for i in range(current_display_size):

                    if random.random() < 0.5:
                        letter = 'T'
                        colour = 'brown'
                    else:
                        letter = 'X'
                        colour = 'green'

                    stim = visual.TextStim(
                        win=win,
                        text=letter,
                        pos=trial_positions[i],
                        height=stim_height,
                        color=colour
                    )

                    stimuli.append(stim)
      Each Frame:
        for stim in stimuli:
            stim.draw()
      End Routine:
        thisExp.addData('search_type', current_search_type)
        thisExp.addData('display_size', current_display_size)
        thisExp.addData('target_presence', current_target_presence)
        thisExp.addData('correct_answer', correct_answer)
    KeyboardComponent response
      allowedKeys [set every repeat] = 'p','a'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine practice_instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PRACTICE

        You will now complete some practice trials.

        Remember:
        P = target present
        A = target absent

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press SPACE to finish.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_instructions
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    TextComponent main_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now the main exoeriment will start.

        You will have to look for the target and press either 'p' or 'a'.

        Press SPACE to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine practice_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = /Users/Devidhulesia/Downloads/practice_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 5.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 5.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 15.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 15.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 30.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 30.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 1.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 1.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 5.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 5.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 15.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 15.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 30.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 30.0, 'target_presence': 'absent'}]
    Routine main_trial
  LoopTerminator practice_loop
  Routine main_instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = /Users/Devidhulesia/Downloads/main_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 5.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 5.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 15.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 15.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 30.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 30.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 1.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 1.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 5.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 5.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 15.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 15.0, 'target_presence': 'absent'},
      {'search_type': 'conjunction', 'display_size': 30.0, 'target_presence': 'present'},
      {'search_type': 'conjunction', 'display_size': 30.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'present'},
      {'search_type': 'feature', 'display_size': 1.0, 'target_presence': 'absent'},
      {'search_type': 'feature', 'display_size': 5.0, 'target_presence': 'present'}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
    Routine main_trial
  LoopTerminator main_loop
  Routine thank_you
